// 05_zintensity.mac -- self-test: Z Intensity Correction enable / load / ready
// Validates the FLAGGED-UNCERTAIN chain in nis_macro_auto_capture.mac:
//   EnableZIntensityControl, ND_ZIntensityControlLoad, ND_ZIntensityControlIsDataReady
//
// Most important call to verify on the real rig: the docs loaders are
// ND_ZIntensityControlLoad(.xml) / ND_ReuseZIntensityCorr(.nd2), neither lists
// .bin. This test answers "does Load accept our .bin?".
//
// PREREQ:
//   1. Enable Z Intensity Correction in the ND Acquisition dialog.
//   2. Generate a .bin via the GUI (Step 4); EDIT the strcat below to its name.
// NOTE: paths are built with strcpy+strcat literals (a dotted #define fails
//   "Cannot Evaluate the Expression" on this build).

int main()
{
    char out[256];
    char binpath[256];
    int ready;

    strcpy(binpath, "S:/Images/Weihao/NISeA/NIS-E-Automation/work/bins");
    strcat(binpath, "/WellD05_sph07.bin");

    strcpy(out, "t05 ENTER: open the Z Intensity Control window, then load:\n");
    strcat(out, binpath);
    WaitText(0, out);

    // Open the Z Intensity Control window so we can SEE whether the load populates it.
    _ND_ZIntensityControl();
    EnableZIntensityControl(1);
    WaitText(0, "Window opened + EnableZIntensityControl(1). Click Continue to load the file.\nWATCH the panel: does a Z-vs-power ramp appear after the next step?");

    ND_ZIntensityControlLoad(binpath);
    WaitText(0, "ND_ZIntensityControlLoad called.\nWATCH for any NIS-E error about the .bin format -- that is the key result.");

    ready = ND_ZIntensityControlIsDataReady();
    sprintf(out, "ND_ZIntensityControlIsDataReady = %d", "ready");
    WaitText(0, out);
    WaitText(0, "t05 PASS if the Z-correction panel shows the loaded profile.\nIf ready=0 on this rig, set CHECK_ZREADY 0 in nis_macro_auto_capture.mac.");
    return TRUE;
}
