// ============================================================================
// nis_macro_capture_zstack.mac -- SpheroidPA capture daemon (plain Z-stack)
//
// For each spheroid: read af_trigger_NN.ini (stage_x/y from GUI Step 2), move XY,
// run a fixed Z-stack, save <id>_zstack.nd2, write af_done_NN.ini, delete trigger.
// NO autofocus (the built-in AF fails on the weak fluorescence signal) and NO
// Z-intensity correction (A1/confocal-only). Uses the current ND channels/exposure
// -- no illumination change.
//
// Rig constraints baked in (verified): single main() only (no user functions);
// work dir + nd2 dir read at RUNTIME from C:/SpheroidPA/session.ini -- the GUI
// Step 3 writes that pointer file, so this daemon follows the current Step 1 save
// dir with NO hardcoded path; CRLF+ASCII; Int_GetKeyString+atof for numeric keys;
// sprintf args as one quoted name list.
//
// Z-stack geometry comes from GUI Step 3 (written into each af_trigger as
// z_centre / z_half / z_step). If a trigger lacks them, these defaults are used:
//   Z_CENTRE 7680, Z_HALF 90, Z_STEP 10  ->  7590..7770 um, 19 planes.
//
// PREREQ: 20X objective; XY+Z initialized; Z drive NOT in Escape; PFS OFF (it
// holds focus and defeats the Z-series); camera NOT in Live. Run GUI Step 3
// "Trigger NIS-E Z-Stack Captures" first -- it writes the af_trigger_NN.ini files
// AND C:/SpheroidPA/session.ini (work_dir + nd2_dir) that this macro reads.
// ============================================================================

#define SEC "spheroid"

int main()
{
    char work_dir[256];
    char cfg[256];
    char nd2_dir[256];
    char trigger_path[256];
    char done_path[256];
    char nd2_path[256];
    char spheroid_id[128];
    char rank_buf[16];
    char numbuf[64];
    char nn[8];
    char zbuf[32];
    char msg[256];
    double stage_x, stage_y;
    double z_centre, z_half, z_step, z_top, z_bottom;
    double idle_elapsed;
    int rank, move_rc, handled_any, handled_total;

    // Trigger + output dirs are NOT hardcoded: read them from the fixed pointer
    // file the GUI writes at Step 3, so this daemon follows the Step 1 save dir.
    strcpy(cfg, "C:/SpheroidPA/session.ini");
    work_dir[0] = 0;
    nd2_dir[0]  = 0;
    Int_GetKeyString(cfg, "paths", "work_dir", work_dir, 256);
    Int_GetKeyString(cfg, "paths", "nd2_dir", nd2_dir, 256);
    if( work_dir[0] == 0 )
    {
        WaitText(0, "session.ini has no work_dir.\nRun GUI Step 3 (Trigger NIS-E Z-Stack Captures) first, then re-run this macro.");
        return FALSE;
    }

    idle_elapsed = 0.0;
    handled_total = 0;

    while( idle_elapsed < 300.0 )
    {
        handled_any = FALSE;
        rank = 1;
        while( rank <= 96 )
        {
            sprintf(nn, "%02d", "rank");
            strcpy(trigger_path, work_dir);
            strcat(trigger_path, "/af_trigger_");
            strcat(trigger_path, nn);
            strcat(trigger_path, ".ini");

            if( ExistFile(trigger_path) == TRUE )
            {
                handled_any = TRUE;
                handled_total = handled_total + 1;

                spheroid_id[0] = 0;
                rank_buf[0]    = 0;
                Int_GetKeyString(trigger_path, SEC, "spheroid_id", spheroid_id, 128);
                Int_GetKeyString(trigger_path, SEC, "rank", rank_buf, 16);
                Int_GetKeyString(trigger_path, SEC, "stage_x", numbuf, 64);
                stage_x = atof(numbuf);
                Int_GetKeyString(trigger_path, SEC, "stage_y", numbuf, 64);
                stage_y = atof(numbuf);

                // Z-stack geometry from the trigger (GUI Step 3); fall back to
                // defaults if a key is absent (atof returns 0 for missing/blank).
                Int_GetKeyString(trigger_path, SEC, "z_centre", numbuf, 64);
                z_centre = atof(numbuf);
                if( z_centre == 0.0 )
                    z_centre = 7680.0;
                Int_GetKeyString(trigger_path, SEC, "z_half", numbuf, 64);
                if( numbuf[0] == 0 )
                    z_half = 90.0;            // key absent -> default full stack
                else
                    z_half = atof(numbuf);    // 0 = locate (single plane), >0 = stack
                Int_GetKeyString(trigger_path, SEC, "z_step", numbuf, 64);
                z_step = atof(numbuf);
                if( z_step == 0.0 )
                    z_step = 10.0;
                z_top    = z_centre + z_half;
                z_bottom = z_centre - z_half;
                sprintf(zbuf, "%.1f", "z_centre");

                sprintf(msg, "Capture rank %s (%s): moving + Z-stack", "rank_buf,spheroid_id");
                SetCommandText(msg);

                strcpy(done_path, work_dir);
                strcat(done_path, "/af_done_");
                strcat(done_path, nn);
                strcat(done_path, ".ini");

                strcpy(nd2_path, nd2_dir);
                strcat(nd2_path, "/");
                strcat(nd2_path, spheroid_id);
                strcat(nd2_path, "_zstack.nd2");

                move_rc = StgMoveXY(stage_x, stage_y, 0);
                if( move_rc != 1 )
                {
                    DeleteFile(done_path);
                    Int_SetKeyString(done_path, SEC, "rank", rank_buf);
                    Int_SetKeyString(done_path, SEC, "spheroid_id", spheroid_id);
                    Int_SetKeyString(done_path, SEC, "status", "move_failed");
                    DeleteFile(trigger_path);
                }
                else
                {
                    if( z_half < 0.5 )
                    {
                        // 1-plane LOCATE pass (z_half=0): just the centre plane, fast,
                        // enough to find the spheroid centroid for re-centering.
                        StgMoveZ(z_centre, 0);
                        Capture();
                    }
                    else
                    {
                        ND_SetZSeriesExp(0, z_top, z_centre, z_bottom, z_step, 0, 0, 0, "", "", "");
                        ND_RunZSeriesExp();
                    }
                    DeleteFile(nd2_path);
                    ImageSaveAs(nd2_path, 14, 0);

                    DeleteFile(done_path);
                    Int_SetKeyString(done_path, SEC, "rank", rank_buf);
                    Int_SetKeyString(done_path, SEC, "spheroid_id", spheroid_id);
                    Int_SetKeyString(done_path, SEC, "z_centre", zbuf);
                    Int_SetKeyString(done_path, SEC, "nd2_path", nd2_path);
                    Int_SetKeyString(done_path, SEC, "status", "ok");
                    DeleteFile(trigger_path);
                }
            }
            rank = rank + 1;
        }

        if( handled_any == TRUE )
        {
            idle_elapsed = 0.0;
        }
        else
        {
            if( handled_total > 0 )
            {
                // Batch done and the queue is empty -> STOP. Do not linger and grab
                // the next pass's triggers (e.g. the full Z-stack written after
                // re-center); re-run this macro once per Trigger click.
                idle_elapsed = 9999.0;
            }
            else
            {
                SetCommandText("Capture daemon: waiting for triggers (click GUI Step 3 Trigger)");
                Wait(1.0);
                idle_elapsed = idle_elapsed + 1.0;
            }
        }
    }

    SetCommandText(0);
    return TRUE;
}
