// ============================================================================
// nis_macro_pa_setup.mac -- SpheroidPA photoactivation SETUP (prep only)
//
// Reads C:/SpheroidPA/session.ini -> work_dir -> pa_trigger.ini (written by GUI
// Step 4 "Run Photoactivation Job") and prepares the rig for the step3_zstack_PA
// JOB. It does NOT photoactivate and does NOT run the job -- it only sets the
// hardware state so the operator can then hit Run on the job in JOBS Explorer.
//
// Actions (each gated by a flag in pa_trigger.ini):
//   1. Stg_RemoveInterlock()            -- clear the A1 laser interlock (REQUIRED
//                                           before imaging/activation).
//   2. SelectOptConf(optical_config)    -- the 850 nm activation OC.
//   3. Stg_PFSInsertExtractDM(0)         -- dichroic mirror OUT (extract PFS DM).
//   4. (optional) Stg_SetMultiLaserPower -- force the 850 line to power_pct; only
//                                           if you set LASER_NAME below, else the
//                                           OC's own power loop sets the power.
//   5. Confocal_SetScanArea(zoom,0,0,0,1) -- centred zoom-N square (offset 0 =
//                                           field centre = the centred spheroid).
//
// Rig dialect (verified): single main() only; CRLF + ASCII; Int_GetKeyString +
// atof for INI values; char[] paths/names; sprintf args as one quoted name list.
//
// PREREQ: SpheroidPA Steps 1-3 done (spheroid centred); A1 MP active; 20X; the
// GUI Step 4 "Run Photoactivation Job" clicked (writes pa_trigger.ini).
// ============================================================================

#define SEC "photoactivation"

int main()
{
    char cfg[256];
    char work_dir[256];
    char trigger_path[256];
    char oc[128];
    char numbuf[64];
    char laser_name[64];
    char msg[256];
    double zoom, power;
    int laser_line;

    // ---- EDIT to also force laser power from the macro ----------------------
    //   Leave LASER_NAME empty ("") to let the OC's power loop set the power.
    //   To force it: set your A1 multi-laser unit name + the 850 nm line index.
    strcpy(laser_name, "");      // e.g. "LU-N4 / Laser" -- your multi-laser name
    laser_line = 0;              // index of the 850 nm line in that unit
    // -------------------------------------------------------------------------

    strcpy(cfg, "C:/SpheroidPA/session.ini");
    work_dir[0] = 0;
    Int_GetKeyString(cfg, "paths", "work_dir", work_dir, 256);
    if( work_dir[0] == 0 )
    {
        WaitText(0, "session.ini has no work_dir.\nRun GUI Step 3 first.");
        return FALSE;
    }
    strcpy(trigger_path, work_dir);
    strcat(trigger_path, "/pa_trigger.ini");
    if( ExistFile(trigger_path) != TRUE )
    {
        WaitText(0, "pa_trigger.ini not found in work_dir.\nClick 'Run Photoactivation Job' in GUI Step 4 first.");
        return FALSE;
    }

    oc[0] = 0;
    Int_GetKeyString(trigger_path, SEC, "optical_config", oc, 128);
    Int_GetKeyString(trigger_path, SEC, "zoom", numbuf, 64);
    zoom = atof(numbuf);
    if( zoom < 0.5 )
        zoom = 8.0;
    Int_GetKeyString(trigger_path, SEC, "power_pct", numbuf, 64);
    power = atof(numbuf);

    // A1-present guard: the A1 confocal calls below (interlock / OC / Confocal_SetScanArea)
    // CRASH NIS-E's grabber manager (access violation in v6_gnr_grabbermanager01.dll) when
    // the A1 is powered OFF. Require an explicit "A1 on" confirmation before any A1 call.
    // Clear numbuf first: Int_GetKeyString leaves it UNCHANGED when a1_on is missing, so
    // without this it kept the prior power_pct value ("30") and silently passed the guard.
    numbuf[0] = 0;
    Int_GetKeyString(trigger_path, "photoactivation", "a1_on", numbuf, 64);
    if( atof(numbuf) < 0.5 )
    {
        WaitText(0, "A1 not confirmed powered ON (a1_on != 1).\nTick 'A1 powered on' in the GUI (or set a1_on=1 in pa_trigger.ini [photoactivation]) once the A1 is up.\nAborting to avoid an A1 grabber crash.");
        return FALSE;
    }

    // 1) Clear the A1 interlock (required before imaging/activation).
    Int_GetKeyString(trigger_path, SEC, "remove_interlock", numbuf, 64);
    if( atof(numbuf) > 0.5 )
    {
        SetCommandText("PA setup: removing A1 interlock...");
        Stg_RemoveInterlock();
    }

    // 2) Switch to the 850 nm activation optical configuration.
    if( oc[0] != 0 )
    {
        SetCommandText("PA setup: selecting activation OC...");
        SelectOptConf(oc);
    }

    // 3) Dichroic mirror OUT (extract the PFS dichroic).
    Int_GetKeyString(trigger_path, SEC, "dichroic_out", numbuf, 64);
    if( atof(numbuf) > 0.5 )
        Stg_PFSInsertExtractDM(0);

    // 4) Optional explicit activation power (only if LASER_NAME set above).
    if( laser_name[0] != 0 )
        Stg_SetMultiLaserPower(laser_name, laser_line, power);

    // 5) Centred zoom-N square: XOffset=YOffset=0 -> field centre = spheroid centre.
    Confocal_SetScanArea(zoom, 0.0, 0.0, 0.0, 1.0);

    // 6) Report; operator then runs step3_zstack_PA in JOBS Explorer.
    sprintf(msg, "PA setup done: OC '%s', zoom %.0f centred, dichroic OUT, interlock cleared.\nNow run step3_zstack_PA in JOBS Explorer.", "oc,zoom");
    WaitText(0, msg);
    SetCommandText(0);
    return TRUE;
}
